PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = demo
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Preparation
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    TextComponent instrucao
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Deves pressionar a seta esquerda ou direita consoante a instrução no ecrã. Quando estiveres pronto, pressiona “espaço”! 
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    KeyboardComponent init_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cues
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    SoundComponent soundThree
      forceEndRoutine = False
      sound [set every repeat] = resources/sounds/3_08_0.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent soundTwo
      forceEndRoutine = False
      sound [set every repeat] = resources/sounds/2_08_0.wav
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    SoundComponent soundOne
      forceEndRoutine = False
      sound [set every repeat] = resources/sounds/1_08_0.wav
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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  Routine Fixation
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text = +
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  Routine Video
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = resources/videos/Clip 1 - PsychoPY.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine Decision
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Decisão: esquerda ou direita?

        pressiona seta esquerda ou seta direita!
    KeyboardComponent key_resp
      allowedKeys = 'a', 'b', 'c', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Preparation
  Routine Cues
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine Fixation
    Routine Video
    Routine Decision
  LoopTerminator trials
